PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['scripts_1_2_3_ - Página1.csv']
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = portuguese_valence
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructions
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    TextComponent instructions_text
      color = black
      letterHeight = 25
      startVal [time (s)] = 0.0
      wrapWidth = 1200
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      text:
        Instruções


        Na tela seguinte você verá uma palavra e deverá julgá-la na escala de acordo com a forma que você se sente, sendo 01 o mais negativo e 9 o mais positivo.


        Pressione ESPAÇO para continuar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Sorteia um número entre 1 e 3
        escolha = list([1, 2, 3])
        shuffle(escolha)
        script_selecionado = escolha[0]

        # Define o intervalo de linhas baseado no sorteio (índices começam em 0)
        # No PsychoPy, a linha 2 da planilha costuma ser o índice 0.
        if script_selecionado == 1:
            minhas_linhas = '0:158'  # Linhas 2 a 159
        elif script_selecionado == 2:
            minhas_linhas = '158:316' # Linhas 160 a 317
        else:
            minhas_linhas = '316:473' # Linhas 318 a 474
  Routine valence
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    TextComponent stim_text
      color = black
      letterHeight = 50
      pos = (0, 200)
      startVal [time (s)] = 0.0
      text [set every frame] = $palavra
      wrapWidth = 100
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    SliderComponent slider
      borderColor = Black
      color = Black
      forceEndRoutine = True
      granularity = 1
      labels = ("1- Muito Negativo", "2", "3", "4", "5", "6", "7", "8", "9- Muito Positivo")
      letterHeight = 25
      pos = (0, -100)
      size = (1200, 50)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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  Routine end
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    TextComponent end_text
      color = black
      letterHeight = 25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      wrapWidth = 1200
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      text:
        Obrigada por sua participação.


        Por favor, aguarde enquanto as suas respostas estão sendo salvas.
  Routine buffer
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    TextComponent buffer_text
      letterHeight = 20
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $minhas_linhas
    conditionsFile = scripts_1_2_3_ - Página1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('item', 'p00001'), ('palavra', 'aberta'), ('ordem', np.float64(4596.0)), ('ocorrências', 2.0), ('corpus_frequencia', 'linguateca'), ('classificação', 'adjetivo'), ('rastreador', 'não'), ('texto', None), ('TVLPB', 'nao'), ('banda', None), ('script', np.int64(1))]),
      OrderedDict([('item', 'p00004'), ('palavra', 'abranger'), ('ordem', np.float64(4293.0)), ('ocorrências', 1036.0), ('corpus_frequencia', 'linguateca'), ('classificação', 'verbo'), ('rastreador', 'não'), ('texto', None), ('TVLPB', 'sim'), ('banda', np.float64(5.0)), ('script', np.int64(1))]),
      OrderedDict([('item', 'p00007'), ('palavra', 'acordar'), ('ordem', np.float64(1955.0)), ('ocorrências', 4.306), ('corpus_frequencia', 'linguateca'), ('classificação', 'verbo'), ('rastreador', 'não'), ('texto', None), ('TVLPB', 'nao'), ('banda', None), ('script', np.int64(1))]),
      OrderedDict([('item', 'p00010'), ('palavra', 'alfaiataria'), ('ordem', None), ('ocorrências', 235.0), ('corpus_frequencia', 'linguateca'), ('classificação', 'substantivo'), ('rastreador', 'não'), ('texto', None), ('TVLPB', 'nao'), ('banda', None), ('script', np.int64(1))]),
      OrderedDict([('item', 'p00013'), ('palavra', 'alto'), ('ordem', np.float64(231.0)), ('ocorrências', 31.736), ('corpus_frequencia', 'linguateca'), ('classificação', 'adjetivo'), ('rastreador', 'não'), ('texto', None), ('TVLPB', 'nao'), ('banda', None), ('script', np.int64(1))])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
    Routine buffer
    Routine valence
  LoopTerminator trials
  Routine end
